PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = solo_project
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $str(frame_type) + " rupees " + str(immediate_amount) + " today " + " or " + " rupees " + str(delayed_amount) + " after " + str(delay_days) + "days"
    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = D:/lab in psychology/solo project/solo project.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'frame_type': 'gain', 'immediate_amount': 5000, 'delayed_amount': 6500, 'delay_days': 30},
      {'frame_type': 'gain', 'immediate_amount': 4700, 'delayed_amount': 10000, 'delay_days': 28},
      {'frame_type': 'lose', 'immediate_amount': 6000, 'delayed_amount': 8500, 'delay_days': 20},
      {'frame_type': 'lose', 'immediate_amount': 3500, 'delayed_amount': 7000, 'delay_days': 30},
      {'frame_type': 'gain', 'immediate_amount': 2000, 'delayed_amount': 3500, 'delay_days': 25},
      {'frame_type': 'gain', 'immediate_amount': 6700, 'delayed_amount': 11000, 'delay_days': 50},
      {'frame_type': 'lose', 'immediate_amount': 3500, 'delayed_amount': 5000, 'delay_days': 40},
      {'frame_type': 'lose', 'immediate_amount': 6000, 'delayed_amount': 11000, 'delay_days': 65},
      {'frame_type': 'gain', 'immediate_amount': 8000, 'delayed_amount': 10500, 'delay_days': 20},
      {'frame_type': 'lose', 'immediate_amount': 4500, 'delayed_amount': 5000, 'delay_days': 35}]
    Routine trial
  LoopTerminator trials
