PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = word priming exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $study_word
    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'salad'},
      {'study_word': 'board'},
      {'study_word': 'store'},
      {'study_word': 'Chart'},
      {'study_word': 'cognitive'},
      {'study_word': 'mouse'},
      {'study_word': 'Pastry'},
      {'study_word': 'garden'},
      {'study_word': 'Cruise'},
      {'study_word': 'Police'},
      {'study_word': 'burger'},
      {'study_word': 'tomato'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': '_oo_', 'Reference': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_i_n', 'Reference': 'cushion', 'old_new': 'old'},
      {'test_word': '_ho_e', 'Reference': 'phone', 'old_new': 'old'},
      {'test_word': 's_l_d', 'Reference': 'salad', 'old_new': 'old'},
      {'test_word': 'P_s_r_', 'Reference': 'pastry', 'old_new': 'old'},
      {'test_word': '_u_g_r', 'Reference': 'burger', 'old_new': 'old'},
      {'test_word': '_ru_s_', 'Reference': 'cruise', 'old_new': 'old'},
      {'test_word': 'P_li_e', 'Reference': 'police', 'old_new': 'old'},
      {'test_word': 't_m_t_', 'Reference': 'tomato', 'old_new': 'old'},
      {'test_word': '_a_d_n', 'Reference': 'garden', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Reference': 'board', 'old_new': 'old'},
      {'test_word': 's_o_e', 'Reference': 'store', 'old_new': 'old'},
      {'test_word': 'c_g_i_i_e', 'Reference': 'cognitive', 'old_new': 'old'},
      {'test_word': 'c_a_t', 'Reference': 'chart', 'old_new': 'old'},
      {'test_word': '_o_s_', 'Reference': 'mouse', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'Reference': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Reference': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'Reference': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'Reference': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'Reference': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
